CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:11
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (file does containregexp ".*H[0-9]{2}")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Date>.*)-(?P<Plate>p[0-9]{2})-(?P<Researcher>[A-Z]{2,3})_(?P<Well>[A-Z][0-9]{2})_(?P<Site>s[0-9])_(?P<Wavelength>w[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "w1")
    Name to assign these images:TransmittedLight
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "w2")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:GFP
    Name the primary objects to be identified:GreenCells
    Typical diameter of objects, in pixel units (Min,Max):5,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.025
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
DilateObjects:[module_num:6|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
    Select the input object:GreenCells
    Name the output object:GreenDilated
    Structuring element:disk,4

SplitOrMergeObjects:[module_num:7|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
    Select the input objects:GreenDilated
    Name the new objects:GreenMerged
    Operation:Merge
    Maximum distance within which to merge objects:0
    Merge using a grayscale image?:No
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    Merging method:Distance
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
MeasureObjectSizeShape:[module_num:8|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
    Select object sets to measure:GreenMerged
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:9|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
    Select the objects to filter:GreenMerged
    Name the output objects:GreenWorms
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Eccentricity
    Filter using a minimum measurement value?:Yes
    Minimum value:0.75
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0

MeasureImageAreaOccupied:[module_num:10|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
    Measure the area occupied by:Objects
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    Select object sets to measure:GreenWorms

ExportToSpreadsheet:[module_num:11|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|Metadata_Researcher,Image|Metadata_Well,Image|Metadata_Site,Image|Metadata_Plate,Image|Metadata_Date,Image|AreaOccupied_AreaOccupied_GreenWorms
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:\g<Date>-\g<Plate>-\g<Researcher>_greenworms.csv
    Use the object name for the file name?:No
