CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Default Input Folder sub-folder|metadata
    Name of the file:image_paths_celltox.csv
    Load images based on this data?:Yes
    Base image location:Default Input Folder|
    Process just a range of rows?:No
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    Group images by metadata?:No
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    Rescale intensities?:Yes

IdentifyPrimaryObjects:[module_num:2|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
    Select the input image:GFP
    Name the primary objects to be identified:GreenCells
    Typical diameter of objects, in pixel units (Min,Max):5,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.025
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
DilateObjects:[module_num:3|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
    Select the input object:GreenCells
    Name the output object:GreenDilated
    Structuring element:disk,4

SplitOrMergeObjects:[module_num:4|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
    Select the input objects:GreenDilated
    Name the new objects:GreenMerged
    Operation:Merge
    Maximum distance within which to merge objects:0
    Merge using a grayscale image?:No
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    Merging method:Distance
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
MeasureObjectSizeShape:[module_num:5|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
    Select object sets to measure:GreenMerged
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:6|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
    Select the objects to filter:GreenMerged
    Name the output objects:GreenWorms
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Eccentricity
    Filter using a minimum measurement value?:Yes
    Minimum value:0.75
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0

MeasureImageAreaOccupied:[module_num:7|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
    Measure the area occupied by:Objects
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    Select object sets to measure:GreenWorms

ExportToSpreadsheet:[module_num:8|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|output/data/
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|Metadata_Date,Image|Metadata_Researcher,Image|Metadata_Well,Image|Metadata_Site,Image|Metadata_Plate,Image|AreaOccupied_AreaOccupied_GreenWorms,Image|AreaOccupied_Perimeter_GreenWorms,Image|AreaOccupied_TotalArea_GreenWorms
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:\g<Date>-\g<Plate>-\g<Researcher>_greenworms.csv
    Use the object name for the file name?:No
