CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:5
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Default Input Folder sub-folder|metadata
    Name of the file:images_metadata_small.csv
    Load images based on this data?:Yes
    Base image location:Default Input Folder|
    Process just a range of rows?:No
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    Group images by metadata?:No
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    Rescale intensities?:Yes

ImageMath:[module_num:2|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:InvertedRaw
    Image or measurement?:Image
    Select the first image:RawImage
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
UntangleWorms:[module_num:3|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enabled:False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
    Overlap style:Both
    Name the output overlapping worm objects:OverlappingWorms
    Name the output non-overlapping worm objects:NonOverlappingWorms
    Training set file location:Elsewhere...|/CellProfiler_Pipelines/worm_models
    Training set file name:WheelerAdultTrainingSet.xml
    Use training set weights?:Yes
    Overlap weight:5.0
    Leftover weight:10.0
    Retain outlines of the overlapping objects?:No
    Outline colormap?:Default
    Name the overlapped outline image:OverlappedWormOutlines
    Retain outlines of the non-overlapping worms?:No
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    Train or untangle worms?:Untangle
    Minimum area percentile:1.0
    Minimum area factor:0.85
    Maximum area percentile:90.0
    Maximum area factor:1.0
    Minimum length percentile:1.0
    Minimum length factor:0.9
    Maximum length percentile:99.0
    Maximum length factor:1.1
    Maximum cost percentile:90.0
    Maximum cost factor:1.9
    Number of control points:21
    Maximum radius percentile:90.0
    Maximum radius factor:1.0
    Maximum complexity:High
    Custom complexity:400

SaveImages:[module_num:4|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
    Select the type of image to save:Image
    Select the image to save:InvertedRaw
    Select method for constructing file names:Single name
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    Enter single file name:\g<Date>-\g<Plate>-\g<Researcher>_\g<Well>_straightened_worms
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    Saved file format:png
    Output file location:Default Output Folder|/Volumes/mzamanian/ImageXpress/proc/20210521-p05-KJG_645/straightened_worms
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
CreateBatchFiles:[module_num:5|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
    Store batch files in default output folder?:No
    Output folder path:/Users/njwheeler/Desktop/CellProfiler_Pipelines/batch_files
    Are the cluster computers running Windows?:No
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    Local root path:/Users/njwheeler/Desktop/
    Cluster root path:/
