CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:21
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Date>.*)-(?P<Plate>p[0-9]{2,3})-(?P<Researcher>[A-Z]{2,3})_(?P<Well>[A-Z][0-9]{2})
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (directory does contain "mzamanian")
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:1
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    Process as 3D?:No
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    Select the rule criteria:and (extension does istif)
    Name to assign these images:RawData
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Single image location:file:/Users/njwheeler/Desktop/cell_profiler_output/well_mask.png   
    Name to assign this image:WellMask
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    Select the image type:Binary mask
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ImageMath:[module_num:5|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:InvertedRaw
    Image or measurement?:Image
    Select the first image:RawData
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:6|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enabled:False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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:InvertedMask
    Image or measurement?:Image
    Select the first image:WellMask
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
MaskImage:[module_num:7|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
    Select the input image:InvertedRaw
    Name the output image:RawMask
    Use objects or an image as a mask?:Image
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    Select image for mask:WellMask
    Invert the mask?:No

EnhanceEdges:[module_num:8|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
    Select the input image:RawMask
    Name the output image:WormEdges
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    Select an edge-finding method:Sobel
    Select edge direction to enhance:All
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
Smooth:[module_num:9|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
    Select the input image:WormEdges
    Name the output image:SmoothedEdges
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:7.5
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
Threshold:[module_num:10|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enabled:False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
    Select the input image:SmoothedEdges
    Name the output image:Threshold
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:250
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    Thresholding method:Otsu

IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:SmoothedEdges
    Name the primary objects to be identified:WormObjects
    Typical diameter of objects, in pixel units (Min,Max):50,10000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:250
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    Thresholding method:Otsu

ConvertObjectsToImage:[module_num:12|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
    Select the input objects:WormObjects
    Name the output image:WormBinary
    Select the color format:Binary (black & white)
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
UntangleWorms:[module_num:13|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
    Select the input binary image:WormBinary
    Overlap style:Both
    Name the output overlapping worm objects:OverlappingWorms
    Name the output non-overlapping worm objects:NonOverlappingWorms
    Training set file location:Default Output Folder|
    Training set file name:WheelerAdultTrainingSet.xml
    Use training set weights?:Yes
    Overlap weight:5.0
    Leftover weight:10.0
    Retain outlines of the overlapping objects?:Yes
    Outline colormap?:Default
    Name the overlapped outline image:OverlappedWormOutlines
    Retain outlines of the non-overlapping worms?:Yes
    Name the non-overlapped outlines image:NonoverlappedWormOutlines
    Train or untangle worms?:Untangle
    Minimum area percentile:1.0
    Minimum area factor:0.85
    Maximum area percentile:90.0
    Maximum area factor:1.0
    Minimum length percentile:1.0
    Minimum length factor:0.9
    Maximum length percentile:99.0
    Maximum length factor:1.1
    Maximum cost percentile:90.0
    Maximum cost factor:1.9
    Number of control points:21
    Maximum radius percentile:90.0
    Maximum radius factor:1.0
    Maximum complexity:High
    Custom complexity:400

OverlayOutlines:[module_num:14|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RawData
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:NonOverlappingWorms
    Select outline color:Green
    Select objects to display:OverlappingWorms

MeasureObjectSizeShape:[module_num:15|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enabled:False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
    Select object sets to measure:NonOverlappingWorms
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

Morph:[module_num:16|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enabled:False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
    Select the input image:WormBinary
    Name the output image:WormWidthsFromBinary
    Select the operation to perform:distance
    Number of times to repeat operation:Once
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    Rescale values from 0 to 1?:Yes

MeasureObjectIntensity:[module_num:17|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enabled:False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
    Select images to measure:WormWidthsFromBinary
    Select objects to measure:NonOverlappingWorms

StraightenWorms:[module_num:18|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
    Select the input untangled worm objects:NonOverlappingWorms
    Name the output straightened worm objects:StraightenedWorms
    Worm width:20
    Training set file location:Default Output Folder|
    Training set file name:WheelerAdultTrainingSet.xml
    Image count:1
    Measure intensity distribution?:No
    Number of transverse segments:1
    Number of longitudinal stripes:5
    Align worms?:Do not align
    Alignment image:None
    Select an input image to straighten:RawData
    Name the output straightened image:StraightenedImage

MeasureObjectSizeShape:[module_num:19|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
    Select object sets to measure:NonOverlappingWorms, StraightenedWorms
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:20|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|/Volumes/mzamanian/ImageXpress/proc/20210521-p01-KJG_641
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:StraightenedWorms|Number_Object_Number,StraightenedWorms|AreaShape_MeanRadius,StraightenedWorms|AreaShape_Perimeter,StraightenedWorms|AreaShape_MajorAxisLength,StraightenedWorms|AreaShape_MaximumRadius,StraightenedWorms|AreaShape_Extent,StraightenedWorms|AreaShape_Area,StraightenedWorms|AreaShape_FormFactor,StraightenedWorms|AreaShape_MedianRadius,StraightenedWorms|AreaShape_Eccentricity,StraightenedWorms|AreaShape_Solidity,StraightenedWorms|AreaShape_MaxFeretDiameter,StraightenedWorms|AreaShape_Compactness,StraightenedWorms|AreaShape_MinorAxisLength,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:StraightenedWorms
    Combine these object measurements with those of the previous object?:No
    File name:\g<Date>-\g<Plate>-\g<Researcher>_straightened_worms.csv
    Use the object name for the file name?:No

SaveImages:[module_num:21|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
    Select the type of image to save:Image
    Select the image to save:StraightenedImage
    Select method for constructing file names:Single name
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    Enter single file name:\g<Date>-\g<Plate>-\g<Researcher>_\g<Well>_straightened_worms
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    Saved file format:png
    Output file location:Elsewhere...|/Volumes/mzamanian/ImageXpress/proc/20210521-p01-KJG_641/straightened_worms
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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